PsychoPy2experiment version="2020.2.9"
Settings
  Data filename = u'data/sub-%s' % expInfo['participant']
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1080]
  expName = stroop
  logging level = debug
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Routines
  Routine welcome
    TextComponent welcome_txt
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Welcome to this experiment!
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  Routine instructions
    TextComponent instructions_txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will see words (either “green” or “red”) in different colors (also either “green” or “red”). Importantly, you need to respond to the COLOR of the word and you need to ignore the actual word. You respond with the arrow keys:

        GREEN color = left
        RED color = right

        (Press ‘enter’ to start the experiment.)
    KeyboardComponent instructions_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine init_fix
    PolygonComponent polygon
      fillColor = $[1,1,1]
      nVertices = 100
      shape = regular polygon...
      size = (0.005625, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine isi
    PolygonComponent fix_dot
      fillColor = $[1,1,1]
      nVertices = 100
      shape = regular polygon...
      size = (0.005625, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t_isi
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        # This is part of the *optional* ToDo!
        import random
        t_isi = random.uniform(0, 1)
  Routine stim
    TextComponent trial_txt
      color [set every repeat] = $stim_color
      font [set every repeat] = Arial
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $stim_word
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    KeyboardComponent trial_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine goodbye
    ImageComponent ty_img
      image = thank_you.png
      size = (0.5625, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
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  Routine feedback
    PolygonComponent yes_circle
      fillColor = $[-1,1,-1]
      nVertices = 100
      pos = (-0.5, 0)
      shape = regular polygon...
      size = (0.05625, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent no_circle
      fillColor = $[1,-1,-1]
      nVertices = 100
      pos = (0.5, 0)
      shape = regular polygon...
      size = (0.05625, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = yes_circle, no_circle
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent feedback_txt
      letterHeight = 0.1
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Was this task easy?
        Click the green circle for “yes” or the red circle for “no”.
Flow
  Routine welcome
  Routine instructions
  Routine init_fix
  LoopInitiator trial_loop loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [OrderedDict([('stim_word', 'green'), ('stim_color', 'red')]),
      OrderedDict([('stim_word', 'green'), ('stim_color', 'red')]),
      OrderedDict([('stim_word', 'green'), ('stim_color', 'red')]),
      OrderedDict([('stim_word', 'green'), ('stim_color', 'red')]),
      OrderedDict([('stim_word', 'green'), ('stim_color', 'red')]),
      OrderedDict([('stim_word', 'green'), ('stim_color', 'green')]),
      OrderedDict([('stim_word', 'green'), ('stim_color', 'green')]),
      OrderedDict([('stim_word', 'green'), ('stim_color', 'green')]),
      OrderedDict([('stim_word', 'green'), ('stim_color', 'green')]),
      OrderedDict([('stim_word', 'green'), ('stim_color', 'green')]),
      OrderedDict([('stim_word', 'red'), ('stim_color', 'red')]),
      OrderedDict([('stim_word', 'red'), ('stim_color', 'red')]),
      OrderedDict([('stim_word', 'red'), ('stim_color', 'red')]),
      OrderedDict([('stim_word', 'red'), ('stim_color', 'red')]),
      OrderedDict([('stim_word', 'red'), ('stim_color', 'red')]),
      OrderedDict([('stim_word', 'red'), ('stim_color', 'green')]),
      OrderedDict([('stim_word', 'red'), ('stim_color', 'green')]),
      OrderedDict([('stim_word', 'red'), ('stim_color', 'green')]),
      OrderedDict([('stim_word', 'red'), ('stim_color', 'green')]),
      OrderedDict([('stim_word', 'red'), ('stim_color', 'green')])]
    Routine stim
    Routine isi
  LoopTerminator trial_loop
  Routine feedback
  Routine goodbye
